PsychoPy2experiment version="2020.2.4post1"
Settings
  Completed URL = https://docs.google.com/forms/d/e/1FAIpQLSe-JyQOJB2rcwl0jYrK_pOr_J8RNK4YRzq_I4WmRa4Pfox_aA/viewform?usp=sf_link
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['ID'],'pilot', expName, expInfo['date'])
  Experiment info = {'ID': ''}
  Full-screen window = True
  Monitor = Acer
  Screen = 2
  Units = height
  Use version = 2020.2
  Window size (pixels) = [3840, 1080]
  color = $[0.114,0.310,0.380]
  expName = TérKépÉsz
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Routines
  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 480.0
      text = Üdvözüljük a TTK Agyi Képalkotó Központjában!
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    KeyboardComponent key_resp
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 478.0
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  Routine anatomy
    TextComponent anatomy_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = height
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      text:
        Anatómiai felvételek következnek.

        A felvételek közben videót vetítünk le Önnek.
    KeyboardComponent general_instructions_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
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    TextComponent general_instructions_continue
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 295.0
      text = Ha minden rendben, nyomja le a gombot a jobb hüvelykujjával. 
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  Routine choose_video
    TextComponent choose_video_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      units = height
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      text:
        Válasszon az alábbi videók közül.

        Jobb mutatóujj: Vihar
        Jobb hüvelykujj: Afrika szépségei

        Bal mutatóujj: Skócia a levegőből
        Bal hüvelykujj: Űr
    KeyboardComponent choose_video_key
      allowedKeys = 'a', 'd', 'c', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 298.5
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    CodeComponent select_video
      Code Type = Auto->JS
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      End Routine:
        key_pressed=choose_video_key.keys
        selected_video='stimuli/eye_of_the_storm.mp4'
        if key_pressed=='d':
            selected_video='stimuli/beauty_of_africa.mp4'
        elif key_pressed=='b':
            selected_video='stimuli/scotland.mp4'
        elif key_pressed=='a':
            selected_video='stimuli/hubble_final.mp4'
        elif key_pressed=='c':
            selected_video='stimuli/eye_of_the_storm.mp4'
  Routine video
    MovieComponent video_file
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $selected_video
      size = (1920,1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1200.0
      units = pix
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    KeyboardComponent end_video_key
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 1195.0
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  Routine resting_state_instruction
    TextComponent rest_instructions_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Most a nyugalmi mérés következik.

        A mérés közben egy fixációs keresztet lát majd a képernyőn.

        Nézze ezt a keresztet. Gondolatait hagyja kalandozni.
        Kérjük, közben maradjon ébren. A nyugalmi mérés 8 percig tart.
    KeyboardComponent rest_instructions_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
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    TextComponent rest_instructions_continue
      color = black
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 290.0
      text = Ha minden rendben nyomja le a gombot a jobb hüvelykujjával. 
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  Routine resting_state
    TextComponent fx_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 540.0
      text = +
      wrapWidth = 0.65
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    KeyboardComponent rest_end_key
      allowedKeys = 'right','space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 535
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  Routine prepare_task
    TextComponent prepare_task_text
      color = black
      letterHeight = 0.05
      pos = (0.0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      wrapWidth = 0.52
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      text:
        Most a feladatok következnek.

        Ha minden rendben, nyomja le a gombot a jobb hüvelykujjával.
    KeyboardComponent prepare_task_key
      allowedKeys = 'd'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 299.0
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Flow
  Routine welcome
  Routine anatomy
  Routine choose_video
  Routine video
  Routine resting_state_instruction
  Routine resting_state
  Routine prepare_task
